PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u'', u'block order': u'1', u'group': u''}
  expName = IAT
  logging level = error
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    ImageComponent stimulusImage
      startVal [time (s)] = 0.3
      image [set every repeat] = $imageStimulus
      size = .6
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    TextComponent stimulusBox
      color [set every repeat] = $stimulusColour
      text [set every repeat] = $stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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    KeyboardComponent requiredResponse
      correctAns = $requiredResponse
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = requiredAllowed
      startVal [time (s)] = 0.3
      store = first key
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    KeyboardComponent feedbackResponse
      correctAns = $feedbackResponse
      storeCorrect = True
      forceEndRoutine = False
      allowedKeys [set every repeat] = feedbackAllowed
      startVal [time (s)] = 0.3
      store = first key
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    CodeComponent code
      Begin Experiment:
        msg1=""

        order = int(expInfo['block order'])

        if order == 1:
            taskFile = "blockOrderA.xlsx"
        elif order == 2:
            taskFile = "blockOrderB.xlsx"
        else:
            print "****UNRECOGNISED ORDER CODE - please use 1 or 2 only****"
      Each Frame:
        if len(feedbackResponse.keys)<1:
            msg1=""
        else:
            msg1="X"
    TextComponent accuracyFeedback
      color = red
      text [set every frame] = $msg1
      pos = [0, -.5]
      startVal [time (s)] = 0.3
      letterHeight = 0.2
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    TextComponent target1box
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box
      color [set every repeat] = $[-1, 1, -1]
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $attribute1
    TextComponent target2box
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent instructionsBox
      text [set every repeat] = $instruction
      pos = [0, -.15]
      startVal [time (s)] = 0.3
      letterHeight = 0.05
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    KeyboardComponent responseContinue
      correctAns = $requiredResponse
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 1
      store = nothing
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    TextComponent target1box_inst
      text [set every repeat] = $target1
      pos = [-.6, .85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target2box_inst
      text [set every repeat] = $target2
      pos = [0.6, 0.85]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute1box_inst
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute1
      pos = [-.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent attribute2box_inst
      color = $[-1, 1, -1]
      text [set every repeat] = $attribute2
      pos = [0.6, 0.55]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orLeftBox_inst
      text [set every repeat] = $orStimulus
      pos = [-.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent orRightBox_inst
      text [set every repeat] = $orStimulus
      pos = [.6, .7]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $taskFile
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine instructions
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block
      loopType = random
      nReps = $nBlockRepeats
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
